PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'run_number': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = value_affirmation
  logging level = debug
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Routines
  Routine trial
    TextComponent value_message_text
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $message
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    TextComponent rating_text
      font = Helvetica
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 4.0
      text = How helpful is this message to help you quit smoking?
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the rating buttons
        r = convert_key_to_rating(expInfo['run_number'], value_keyboard.keys)
        value_rating.markerPos = r
        # confirm rating by setting to current markerPos
        value_rating.rating = r
    SliderComponent value_rating
      forceEndRoutine = False
      granularity = 0
      labels = ['not at all','extremely']
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 4
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent value_keyboard
      allowedKeys = '5', '6', '7', '8', '9'
      forceEndRoutine = False
      startVal [time (s)] = 6
      stopVal [duration (s)] = 4
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  Routine introduction
    TextComponent introduction_text
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = $instruction_text
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    KeyboardComponent key_resp
      allowedKeys = ['apostrophe']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      store = nothing
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  Routine end
    TextComponent end_text
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Placeholder end text
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  Routine iti
    ImageComponent intertrial_interval
      durationEstim = 3
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine setup
    CodeComponent choose_conditions_file
      Code Type = Auto->JS
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      Before Experiment:
        rating_keys = ['5', '6', '7', '8', '9']


        def convert_key_to_rating(run_number, key):
            rating = None
            if key in rating_keys:
                rating = int(key)
                if run_number != '0':
                    rating = rating - 4

            return rating
      Begin Experiment:
        conditions_file = 'conditions.csv'
        instruction_text = 'Calibrating scanner'
        if expInfo['run_number'] == '0':
            conditions_file = 'conditions_practice.csv'
            instruction_text = 'Instructions on how to perform task'
Flow
  Routine setup
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine iti
  LoopTerminator trials
  Routine end
